20120515_120854 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;LB+Cam
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 50ul;50ul
4,1;384WellPlate;Labware11
4,2;Eppendorf Block 24Pos.;Labware8
11,0;BoxDiTi 1000ul;1000ul
11,2;96WellMicroplate;Labware9
1;System
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"1",500,"0.1",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"1",500,"0.5",500,10,70,30,0,0,"1",1000,0);
IfThen("1",0,"2");
Comment("Fill 96 Plates ");
GetDITI2(255,"BoxDiTi 1000ul",1,0,10,70);
BeginLoop("3","FillPlates_1");
Aspirate(255,"Water free dispense no LD","720","720","720","720","720","720","720","720",0,0,0,0,1,3,1,"0108¯1",0,0);
BeginLoop("4","FillPlates_2");
Dispense(255,"Water free dispense no LD","180","180","180","180","180","180","180","180",0,0,0,0,11,2,1,"0C08¯1000000000000",2,"FillPlates_2",0,1,"FillPlates_1",0,4,0);
EndLoop();
EndLoop();
DropDITI(255,1,6,10,70,0);
Comment("Inoculate");
UserPrompt("?",0,-1);
BeginLoop("3","Sample");
BeginLoop("8","Inoculate");
GetDITI2(1,"Box DiTi 50ul",1,0,10,70);
Variable(WELL_OFFSET,"(LOOP_Inoculate-1)*3",0,"",0,1.000000,10.000000,0,2,0,0);
Mix(1,"Water free dispense no LD","50",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",3,1,"Sample",2,1,0);
Aspirate(1,"Water free dispense DiTi 50","20",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",1,"Sample",2,1,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense no LD","20",0,0,0,0,0,0,0,0,0,0,0,11,2,1,"0C0810000000000000",2,"Sample",0,3,"Inoculate",1,1,0);
DropDITI(1,1,6,10,70,0);
EndLoop();
EndLoop();
Else();
EndIf();
Comment("Dilut");
UserPrompt("?",0,-1);
BeginLoop("3","Sample");
BeginLoop("2","dilut");
GetDITI2(255,"Box DiTi 50ul",1,0,10,70);
Mix(255,"Water free dispense no LD","50","50","50","50","50","50","50","50",0,0,0,0,11,2,1,"0C08¯1000000000000",3,2,"Sample",0,3,"dilut",0,1,0);
Aspirate(255,"Water free dispense LD & Trace","20","20","20","20","20","20","20","20",0,0,0,0,11,2,1,"0C08¯1000000000000",2,"dilut",0,1,"Sample",0,3,0);
Dispense(255,"Water free dispense no LD","20","20","20","20","20","20","20","20",0,0,0,0,11,2,1,"0C080®300000000000",2,"Sample",0,3,"dilut",0,1,0);
DropDITI(255,1,6,10,70,0);
EndLoop();
EndLoop();
