20131106_104923 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough Cont Flow;Labware4
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;Diti200
4,2;Eppendorf Block 24Pos.;Cooler
11,0;BoxDiTi 1000ul;Diti1000
11,1;24WellCaCo2Plate;LinePlate
1;System
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"0.5",500,"0.5",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"0.5",500,"0.5",500,10,70,30,0,0,"1",1000,0);
ActivateADH("Box DiTi 200 ul","D:\OctoTip\Protocols\SerialDilutionONEvolution\Scripts\ReplaceDiTi200.esc");
ImportVariable(Lic24PlateCart#Lic24PlatePos#FromWell#FreezeInd,"D:\OctoTip\Protocols\SerialDilutionONEvolution\Scripts\DiluteData.csv",0#0#0#0,"1#1#1#0",0,1,0,1,1);
FACTS("StoreX","StoreX_PresentPlate","~Lic24PlateCart~,~Lic24PlatePos~","1","24WellCaCo2Plate");
FACTS("StoreX","StoreX_EndAccess","","0","");
Transfer_Rack("26","11",1,1,1,0,1,"17","24WellCaCo2Plate","Narrow","","","Storex","MP 3Pos Flat","MP 3Pos Flat","1","2","2");
Comment("Fill24Well");
GetDITI2(1,"BoxDiTi 1000ul",1,0,10,70);
Comment("Get & Open Plat");
BeginLoop("2","FillWell");
Aspirate(1,"Water free dispense LD & Trace","500",0,0,0,0,0,0,0,0,0,0,0,1,3,1,"010810",0,0);
Variable(WELL_OFFSET,"FromWell",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense no LD","500",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"06041000",0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
EndLoop();
Comment("Freeze");
IfThen("FreezeInd",1,"0");
Variable(WELL_OFFSET,"FromWell-1",0,"",0,1.000000,10.000000,0,2,0,0);
Mix(1,">> Water free dispense LD & Trace <<	120","300",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"06041000",3,0,0);
Aspirate(1,">> Water free dispense LD & Trace <<	119","300",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"06041000",0,0);
Variable(WELL_OFFSET,"FreezeInd-1",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense no LD","300",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",0,0);
Mix(1,"Water free dispense no LD","200",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",3,0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
DropDITI(1,1,6,10,70,0);
GetDITI2(1,"Box DiTi 200 ul",1,0,10,70);
Comment("Dilute");
Variable(WELL_OFFSET,"FromWell-1",0,"",0,1.000000,10.000000,0,2,0,0);
Aspirate(1,">> Water free dispense LD & Trace <<	121","10",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"06041000",0,0);
Dispense(1,"Water free dispense no LD","10",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"06042000",0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
DropDITI(1,1,6,10,70,0);
Comment("ReturnPlate");
Transfer_Rack("11","26",1,1,1,0,0,"17","24WellCaCo2Plate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","Storex","2","2","1");
FACTS("StoreX","StoreX_ReturnPlate","~Lic24PlateCart~,~Lic24PlatePos~","0","");
FACTS("StoreX","StoreX_EndAccess","","0","");
